PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = $[0.6549,0.6549,0.6549]
  expName = rwe-eeg_s1_r1_e1trmp
  exportHTML = manually
  logging level = debug
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Routines
  Routine calibration
    TextComponent calibText
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 1.1
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      text:
        Audio calibrating…

        Please remain silent for 5 seconds.
    TextComponent calibTimer
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $round(5 - t)
      wrapWidth = 1.1
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  Routine breakLoop
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        counterbalance.finished=True
  Routine instructCalibration
    SoundComponent sound_5
      hamming = False
      sound = resources\sine-200z-1s_100ms-fade.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      volume = 75
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    TextComponent explainCalib
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        Before we begin, a short period of silence is needed to calibrate the task audio.

        The calibration period will last 5 seconds. During the calibration, please do not speak, but it is OK for there to be background noise.

        Audio calibration will begin when you press the space key.
    TextComponent instructContinue4
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key to begin calibration.
    KeyboardComponent key_resp_02
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruct
    TextComponent text_3
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        The audio calibration is complete.

        When a text passage comes on-screen, begin reading aloud immediately.
        Do not “pre-read” the text. Just dive in!

        Remember to read clearly, at your normal volume and reading speed. When you finish reading, press the space key to continue.
    TextComponent instructContinue5
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key to proceed to the first passage.
    KeyboardComponent key_resp_03
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent fullscreenOpen2
      Code Type = JS
      Begin JS Routine:
        psychoJS.window.adjustScreenSize();
  Routine readComplete
    TextComponent readCompleteintroLDT
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the reading task!
      wrapWidth = 1.1
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    KeyboardComponent key_resp_06
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instructContinue6
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key to exit.
  Routine welcome
    CodeComponent jsCode
      Code Type = JS
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine introReading
    TextComponent welcomeReading
      color = black
      letterHeight = 0.03
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.9
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      text:
        In this task, you will be presented with a series of text passages that you will read aloud.

        Please read clearly, at your normal volume and reading speed, as if you were reading a story to another person.

        There are a total of 8 passages. Each passage should take about 2 minutes to read. After each passage, you will be asked a question based on the text.

        You may take a short break (30 seconds) between each passage if you like, or you can continue to the next passage right away.
    KeyboardComponent key_resp_01
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent headerReading
      color = black
      letterHeight = 0.08
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the reading task!
      wrapWidth = 1.1
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    TextComponent instructContinue2
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key to continue.
    CodeComponent fullscreenOpen1
      Code Type = JS
      Begin JS Routine:
        psychoJS.window.adjustScreenSize();
  Routine passage1
    SoundComponent sound_1
      hamming = False
      sound = C:\Users\NDClab\Desktop\Experiments\RWE\jess_darwin\rwe-eeg_s1_r1_e1\resources\sine-200z-1s_100ms-fade.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      volume = 75
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    TextComponent passageText1
      color = black
      letterHeight = 0.027
      startVal [time (s)] = 0.2
      text [set every repeat] = $passageText
      wrapWidth = 1.1
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    CodeComponent codeTriggers
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #STIM TRIGGER: TEXT APPEARS
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if passageText1.status == STARTED and not stimTriggerSent:
            stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0xb]) #hexcode = 11, eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    TextComponent instructContinue1
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.2
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key to continue.
    KeyboardComponent key_resp_04
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        respTriggerSent = False
      Each Frame:
        #STIM TRIGGER: TEXT DISAPPEARS
        if key_resp_04.keys and not respTriggerSent: # the participant has proceeded to the next screen (stimulus text disappears)
            respTriggerSent = True
            port.write([0xa]) #hexcode = 10, eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    CodeComponent codePassageCount
      Code Type = Auto->JS
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      End Routine:
        passageCount += 1
  Routine challenge1
    SoundComponent sound_3
      hamming = False
      sound = C:\Users\NDClab\Desktop\Experiments\RWE\jess_darwin\rwe-eeg_s1_r1_e1\resources\sine-200z-1s_100ms-fade.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      volume = 75
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    TextComponent challengeText1
      color = black
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $firstchallengeQuestion
      wrapWidth = 1.1
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    TextComponent challengeOptions1
      color = black
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $firstletterA + str(firstchoiceA) + '\n' + firstletterB + str(firstchoiceB) + '\n' + firstletterC + str(firstchoiceC) + '\n' + firstletterD + str(firstchoiceD)
      wrapWidth = 1.1
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    CodeComponent codeTriggers2
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #STIM TRIGGER: CHALLENGE QUESTION APPEARS
        #the if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if challengeText1.status == STARTED and not stimTriggerSent:
            stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x15]) #hexcode = 21, eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    TextComponent answerInstruct1
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Select your answer by pressing the corresponding letter on the keyboard.
    TextComponent counterText1
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(passageCount) + ' of 20'
      wrapWidth = 1.1
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    KeyboardComponent challengeResponse1
      allowedKeys = 'a','b','c','d'
      correctAns = $firstcorrectAnswer
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        respTriggerSent = False
      Each Frame:
        #RESPONSE TRIGGER
        if challengeResponse1.keys and not respTriggerSent:
            if challengeResponse1.corr == 0 and stimTriggerSent: #error response
                respTriggerSent = True
                port.write([0x1e]) #hexcode = 30, eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
                continueRoutine = False
            elif challengeResponse1.corr == 1 and stimTriggerSent: #correct response
                respTriggerSent = True
                port.write([0x1f]) #hexcode = 31, eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
                continueRoutine = False
  Routine readyScreen1
    SoundComponent sound_4
      hamming = False
      sound = resources\sine-200z-1s_100ms-fade.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      volume = 75
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    TextComponent readingBreak1
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      wrapWidth = 1.1
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      text:
        If you need a break, please take a short break now (30 seconds).

        You can skip this break and proceed to the next passage
        by pressing the space key.
    KeyboardComponent key_resp_05
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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    TextComponent timer1
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text [set every frame] = $round(30 - t)
      wrapWidth = 1.1
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if passageCount == 8:
            continueRoutine = False
  Routine countReset_2
  Routine setVariables
    CodeComponent readAloudCode
      Code Type = Auto->JS
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      Begin Experiment:
        passageCount = 0
    CodeComponent eegTriggerCode
      Code Type = Auto->JS
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      Before Experiment:
        import serial #used for sending eeg triggers
        import time #indirectly used for sending eeg triggers (how long to wait before clearing port)

        port = serial.Serial('COM3') #open specified port (COM3) for sending eeg triggers to
        PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)

        port.write([0x00]) #clear serial port
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      Begin Experiment:
        win.mouseVisible = False #hide mouse cursor
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        port.write([0xFF]) #set port values back to default state (FF)
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        port.close() #close port opened at start of exp
  Routine instructChallenge
    SoundComponent sound_2
      hamming = False
      sound = C:\Users\NDClab\Desktop\Experiments\RWE\jess_darwin\rwe-eeg_s1_r1_e1\resources\sine-200z-1s_100ms-fade.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      volume = 75
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    TextComponent instructChallengeText
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        On the next screen, you will be presented with a question based on the text you have just read aloud.

        You will also be presented with four possible answers to this question.

        Silently, read the question and answer choices. Select the correct answer by pressing the associated letter on your keyboard.
    TextComponent instructContinue18
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key to continue to the question.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent challengeSkip
      Code Type = Auto->JS
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      Begin Routine:
        if passageCount > 1:
            continueRoutine = False
Flow
  Routine welcome
  Routine introReading
  Routine instructCalibration
  Routine calibration
  Routine instruct
  Routine setVariables
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = resources/passageList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'passageText': 'The tortoise is very fond of water, drinking large quantities, and wallowing in the mud. The larger islands alone possess springs, and these are always situated towards the central parts, and at a considerable height. The tortoises, therefore, which frequent the lower districts, when thirsty, are obliged to travel from a long distance. Hence broad and well-beaten paths branch off in every direction from the wells down to the sea-coast; and the Spaniards by following them up, first discovered the watering-places. When I landed at Chatham Island, I could not imagine what animal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,
      {'passageText': 'The only light which I can throw on this remarkable difference in the inhabitants of the different islands, is, that very strong currents of the sea running in a westerly and W.N.W. direction must separate, as far as transportal by the sea is concerned, the southern islands from the northern ones; and between these northern islands a strong N.W. current was observed, which must effectually separate James and Albemarle Islands. As the archipelago is free to a most remarkable degree from gales of wind, neither the birds, insects, nor lighter seeds, would be blown from island to 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,
      {'passageText': 'The country may be described as a level plain of about three hundred feet in elevation, which in all parts has been worn into flat-bottomed valleys. This structure is remarkable in a granitic land, but is nearly universal in all those softer formations of which plains are usually composed. The whole surface is covered by various kinds of stately trees, interspersed with patches of cultivated ground, out of which houses, convents, and chapels arise. It must be remembered that within the tropics, the wild luxuriance of nature is not lost even in the vicinity of large cities: for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,
      {'passageText': 'The day rose splendidly clear. The volcano of Orsono was spouting out volumes of smoke. This most beautiful mountain, formed like a perfect cone, and white with snow, stands out in front of the Cordillera. Another great volcano, with a saddle-shaped summit, also emitted from its immense crater little jets of steam. Subsequently we saw the lofty-peaked Corcovado -- well deserving the name of "el famoso Corcovado." Thus we beheld, from one point of view, three great active volcanoes, each about seven thousand feet high. In addition to this, far to the south, there were other lof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
    Routine passage1
    Routine instructChallenge
    Routine challenge1
    Routine readyScreen1
  LoopTerminator trials
  Routine readComplete
